// Author: Ronald van Elburg  (RonaldAJ at vanElburg eu)
//
// NEURON script for the paper:
//
//   Ronald A.J. van Elburg and Arjen van Ooyen (2010) `Impact of dendritic size and
//   dendritic topology on burst firing in pyramidal cells', 
//   PLoS Comput Biol 6(5): e1000781. doi:10.1371/journal.pcbi.1000781.
//
// Please consult readme.txt or instructions on the usage of this file.
//
// This software is released under the GNU GPL version 3: 
// http://www.gnu.org/copyleft/gpl.html

func integratedArea (){local myArea
    myArea=0
    forsec $s1 {
        for (x) myArea+=area(x)
    }

    return myArea
}